PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = #C0C0C0
  colorSpace = hex
  expName = CvE_Comparison_PP3
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Routines
  Routine trial
    ImageComponent stimLeft
      image [set every repeat] = $stimLeftFile
      pos = (.2, 0)
      saveStartStop = False
      size = (.3175, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent stimRight
      image [set every repeat] = $stimRightFile
      pos = (-.2, 0)
      saveStartStop = False
      size = (.3175, .5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent decisionStim
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine end
    TextComponent goodJob
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Great job! You are ready for the next activity.

        Please let the experimenter know.
  Routine instr
    ImageComponent instrImages1
      image [set every repeat] = $instrImage
      saveStartStop = False
      size = (1, .5625)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    TextComponent fixCross
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine blank
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if decisionStim.keys != None:
            continueRoutine=False
    TextComponent textBlank
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent decisionBlank
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent BreakText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $BreakSectionText
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    KeyboardComponent key_resp_break
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ready
    ImageComponent readyImage
      image = instrFiles/CircleComp_instr4.jpg
      saveStartStop = False
      size = (1, .5625)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_ready
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditionsFile = CvE_CompInstructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instrImage', 'instrFiles/CircleComp_instr1.JPG')]),
      OrderedDict([('instrImage', 'instrFiles/CircleComp_instr2.JPG')]),
      OrderedDict([('instrImage', 'instrFiles/CircleComp_instr3.JPG')]),
      OrderedDict([('instrImage', 'instrFiles/CircleComp_instr4.JPG')])]
    Routine instr
  LoopTerminator instructions
  LoopInitiator pracTrials loopType="TrialHandler"
    conditionsFile = stims/CvE_CompStimuli_PRACTICE.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimLeftFile', 'stims/DotACDC/PRACTICE/Circle_Prac_1_3_4780_14340.png'), ('stimRightFile', 'stims/DotACDC/PRACTICE/Circle_Prac_4_9_4042_9095.png'), ('Format', 'CirclePrac'), ('Left_Instantiation', 'na'), ('Left_FracNum', 1), ('Left_FracDen', 3), ('Left_Decimal', 0.3333333333333333), ('Left_NonsymNum', 4780), ('Left_NonsymDen', 14340), ('Right_Instantiation', 'na'), ('Right_FracNum', 4), ('Right_FracDen', 9), ('Right_Decimal', 0.4444444444444444), ('Right_NonsymNum', 4042), ('Right_NonsymDen', 9095), ('Pair', '2_7_vs_3_8'), ('AbsDistance', 0.1111111111111111), ('CorrectChoice', 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,
      OrderedDict([('stimLeftFile', 'stims/DotACDC/PRACTICE/Circle_Prac_1_8_2015_16120.png'), ('stimRightFile', 'stims/DotACDC/PRACTICE/Circle_Prac_1_3_4780_14340.png'), ('Format', 'CirclePrac'), ('Left_Instantiation', 'na'), ('Left_FracNum', 1), ('Left_FracDen', 8), ('Left_Decimal', 0.125), ('Left_NonsymNum', 2015), ('Left_NonsymDen', 16120), ('Right_Instantiation', 'na'), ('Right_FracNum', 1), ('Right_FracDen', 3), ('Right_Decimal', 0.3333333333333333), ('Right_NonsymNum', 4780), ('Right_NonsymDen', 14340), ('Pair', '2_3_vs_3_8'), ('AbsDistance', 0.20833333333333331), ('CorrectChoice', 'f')]),
      OrderedDict([('stimLeftFile', 'stims/DotACDC/PRACTICE/Circle_Prac_2_5_4519_11298.png'), ('stimRightFile', 'stims/DotACDC/PRACTICE/Circle_Prac_8_9_3701_4164.png'), ('Format', 'CirclePrac'), ('Left_Instantiation', 'na'), ('Left_FracNum', 2), ('Left_FracDen', 5), ('Left_Decimal', 0.4), ('Left_NonsymNum', 4519), ('Left_NonsymDen', 11298), ('Right_Instantiation', 'na'), ('Right_FracNum', 8), ('Right_FracDen', 9), ('Right_Decimal', 0.8888888888888888), ('Right_NonsymNum', 3701), ('Right_NonsymDen', 4164), ('Pair', '2_9_vs_2_9'), ('AbsDistance', 0.4888888888888888), ('CorrectChoice', 'b')]),
      OrderedDict([('stimLeftFile', 'stims/DotACDC/PRACTICE/Circle_Prac_4_9_4042_9095.png'), ('stimRightFile', 'stims/DotACDC/PRACTICE/Circle_Prac_1_8_2015_16120.png'), ('Format', 'CirclePrac'), ('Left_Instantiation', 'na'), ('Left_FracNum', 4), ('Left_FracDen', 9), ('Left_Decimal', 0.4444444444444444), ('Left_NonsymNum', 4042), ('Left_NonsymDen', 9095), ('Right_Instantiation', 'na'), ('Right_FracNum', 1), ('Right_FracDen', 8), ('Right_Decimal', 0.125), ('Right_NonsymNum', 2015), ('Right_NonsymDen', 16120), ('Pair', '7_8_vs_5_6'), ('AbsDistance', 0.3194444444444444), ('CorrectChoice', 'f')])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
    Routine fixation
    Routine trial
    Routine blank
  LoopTerminator pracTrials
  Routine ready
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = CvE_CompBreaks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample1.xlsx'), ('BreakSectionText', 'Break! Section 1 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample2.xlsx'), ('BreakSectionText', 'Break! Section 2 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample3.xlsx'), ('BreakSectionText', 'Break! Section 3 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample4.xlsx'), ('BreakSectionText', 'Break! Section 4 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample5.xlsx'), ('BreakSectionText', 'Break! Section 5 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample6.xlsx'), ('BreakSectionText', 'Break! Section 6 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample7.xlsx'), ('BreakSectionText', 'Break! Section 7 of 8 complete.')]),
      OrderedDict([('SectionFile', 'CvE_CompStimuli_Sample8.xlsx'), ('BreakSectionText', 'Great job! You are ready for the next activity! Please let the experimenter know.')])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $SectionFile
      loopType = random
      nReps = 1
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      Routine fixation
      Routine trial
      Routine blank
    LoopTerminator trials
    Routine Break
  LoopTerminator trialLoop
  Routine end
