PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Save log file = False
  expName = CvE_Comparison
  Screen = 1
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Routines
  Routine fixation
    TextComponent fixCross
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    ImageComponent stimLeft
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $stimLeftFile
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_stim
      stopVal [duration (s)] = 0.5
      forceEndRoutine = True
      allowedKeys = 'f', 'j','space'
      startVal [time (s)] = 0.0
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  Routine GoodJob
    TextComponent GreatJobText
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Great job! You are ready for the next activity.

        Please let the experimenter know.
  Routine blank
    TextComponent blankPage
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent decisionBlank
      forceEndRoutine = True
      allowedKeys = 'f', 'j', 'space'
      startVal [time (s)] = 0.0
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  Routine instr
    ImageComponent Instr1
      startVal [time (s)] = 0.0
      image [set every repeat] = $instrImage
      size = (0.5, 0.5)
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    KeyboardComponent key_resp_instr
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions loopType="TrialHandler"
    conditionsFile = CvE_CompInstructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instrImage': u'instr/CircleComp_instr1.JPG'},
      {'instrImage': u'instr/CircleComp_instr2.JPG'},
      {'instrImage': u'instr/CircleComp_instr3.JPG'},
      {'instrImage': u'instr/CircleComp_instr4.JPG'}]
    Routine instr
  LoopTerminator instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = CvE_CompStimuli.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'stimRightFile': u'titanic.jpeg', 'stimLeftFile': u'fiances.jpeg'},
      {'stimRightFile': u'laughter.jpeg', 'stimLeftFile': u'friendship.jpeg'},
      {'stimRightFile': u'joy.jpeg', 'stimLeftFile': u'joy.jpeg'},
      {'stimRightFile': u'friendship.jpeg', 'stimLeftFile': u'laughter.jpeg'},
      {'stimRightFile': u'fiances.jpeg', 'stimLeftFile': u'titanic.jpeg'}]
    Routine fixation
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine GoodJob
